PsychoPy2experiment version="2020.2.4"
Settings
  Data filename = 'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'Session': '001', 'Age': '', 'Sex': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = white
  expName = MRTway1
  logging level = debug
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Routines
  Routine Welcome_Screen
    TextComponent introduction
      color = black
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, 0.4)
      startVal [time (s)] = 0
      text = This is a test of your ability to look at a drawing of a given object and find the same object within a set of dissimilar objects. The only diference between the original object and the chosen object will be that they are presented at different angles. An illustration of this principle is given below where the same single object is given in five different positions. Look at each of them to satisfy yourself that they are only presented at different angles from one another.
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    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent exampleText
      color = black
      font = Times New Roman
      letterHeight = 0.030
      startVal [time (s)] = 0.0
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      text:
        Below are two drawings of new objects. They cannot be made to match the above five drawings. Please note that you may not turn over the objects. Satisfy yourself that they are different from the above.
    TextComponent responseIndicator
      color = black
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue.
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    ImageComponent example
      image = example.jpg
      pos = (0, 0.17)
      size = (0.80, 0.18)
      startVal [time (s)] = 0
      texture resolution = 512
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    ImageComponent image_2
      image = sample2.jpg
      pos = (0, -0.25)
      size = (0.70, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine Example
    TextComponent practiceProblemInstructions
      color = black
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Now let’s do some sample problems. For each problem there is a primary object on the far left. You are to determine which two of four objects to the right are the same object given on the far left. In each problem always two of the four drawings are the same object as the one on the left. You are to put Xs in the boxes below the correct ones, and leave the incorrect ones blank. The first sample problem is done for you.
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    ImageComponent practiceProblemImage
      image = sampleProblem.jpg
      size = (1.70, 0.38)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent inputIndicatorPractice
      color = black
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue.
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    KeyboardComponent responseExample
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SameQuestion1
    ImageComponent sampleQuestionImage1
      image = 1example.jpg
      size = (1.60, 0.38)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent inputIndicatorSampleQuestion1
      color = black
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue.
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    KeyboardComponent responseSampleQuestion1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent SampleQuestionsInstructions
      color = black
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Do the rest of the sample problems yourself. Which two drawings of the four on the right show the same object as the one on the left? There are always two and only two correct answers for each problem. Select the two correct drawings by pressing “1”, “2”,”3”, or “4”, selecting the picture from left to right. 
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  Routine SampleQuestion2
    ImageComponent sampleQuestionImage2
      image = 2example.jpg
      size = (1.60, 0.38)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent inputIndicatorSampleQuestion2
      color = black
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue.
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    KeyboardComponent responseSampleQuestion2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SampleQuestion3
    ImageComponent sampleQuestionImage3
      image = 3example.jpg
      size = (1.60, 0.38)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent inputIndicatorSampleQuestion3
      color = black
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue.
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    KeyboardComponent responseSampleQuestion3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Answer
    TextComponent SampleAnswers
      color = black
      font = Times New Roman
      letterHeight = 0.040
      startVal [time (s)] = 0.0
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      text:
        Answers:       (1) first and second drawings are correct
                            (2) first and third drawings are correct
                               (3) second and third drawings are correct
    TextComponent inputIndicatorAnswer
      color = black
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue.
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    KeyboardComponent responseAnswer
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions
    TextComponent InstructionsText
      color = black
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        This test has two parts. You will have 3 minutes for each of the two part has 10 questions. When you have finished Part I, STOP. Please do not go on to Part II until you are asked to do so. Remember: There are always two and only two correct answers for each item.

        Work as quickly as you can without sacrificing accuracy. Your score on this test will reflect both the correct and incorrect responses. Therefore, it will not be to your advantage to guess unless you have some idea which choice is correct.
    TextComponent IndicatorWarning
      color = black
      font = Times New Roman
      letterHeight = 0.050
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Do Not Continue Until Asked To Do So.

        Press ‘space’ to continue.
    KeyboardComponent responseInstructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SampleQuestion1
    TextComponent practiceProblemInstructions_2
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Now let’s do some sample problems. For each problem there is a primary object on the far left. You are to determine which two of four objects to the right are the same object given on the far left. In each problem always two of the four drawings are the same object as the one on the left. You are to put Xs in the boxes below the correct ones, and leave the incorrect ones blank. The first sample problem is done for you.
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    ImageComponent practiceProblemImage_2
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent inputIndicatorPractice_2
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue.
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    KeyboardComponent responseExample_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Question1
    ImageComponent image
      image [set every repeat] = $Image
      size = (1.40, 0.31)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent text
      color = black
      font = Times New Roman
      letterHeight = 0.050
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press ‘space’ to continue.
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    KeyboardComponent responseQuestion1
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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  Routine Part1
    TextComponent Part1Text
      color = black
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Part I.
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    KeyboardComponent responsePart1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Part2
    TextComponent part2Indicator
      color = black
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Part II
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    KeyboardComponent part2IndicatorResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr
    TextComponent instrStop
      color = black
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Stop.

        Do Not Continue Until Asked To Do So.
    KeyboardComponent stopIndicator
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine part2Questions
    TextComponent indicatorQuestionPart2
      color = black
      font = Times New Roman
      letterHeight = 0.050
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press ‘space’ to continue.
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    KeyboardComponent keyboardIndicator
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent part2Response
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $corrAns2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    ImageComponent part2Images
      image [set every repeat] = $image
      size = (1.40, 0.31)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine End
    TextComponent EndScreen
      color = black
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Congrats! You have finished the test.

        The End
    KeyboardComponent endResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine testName
    TextComponent WelcomeScreen
      color = black
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Mental Rotation Test (MRT)
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine testName
  Routine Welcome_Screen
  Routine Example
  Routine SameQuestion1
  Routine SampleQuestion2
  Routine SampleQuestion3
  Routine Answer
  Routine Instructions
  Routine Part1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial1234.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Image', 'P1Q1.jpg'), ('corrAns', ['1', '3'])]),
      OrderedDict([('Image', 'P1Q2.jpg'), ('corrAns', ['1', '4'])]),
      OrderedDict([('Image', 'P1Q3.jpg'), ('corrAns', ['2', '4'])]),
      OrderedDict([('Image', 'P1Q4.jpg'), ('corrAns', ['2', '3'])]),
      OrderedDict([('Image', 'P1Q5.jpg'), ('corrAns', ['1', '3'])]),
      OrderedDict([('Image', 'P1Q6.jpg'), ('corrAns', ['1', '4'])]),
      OrderedDict([('Image', 'P1Q7.jpg'), ('corrAns', ['2', '4'])]),
      OrderedDict([('Image', 'P1Q8.jpg'), ('corrAns', ['2', '3'])]),
      OrderedDict([('Image', 'P1Q9.jpg'), ('corrAns', ['3', '4'])]),
      OrderedDict([('Image', 'P1Q10.jpg'), ('corrAns', ['1', '4'])])]
    Routine Question1
  LoopTerminator trials
  Routine instr
  Routine Part2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = partQuestions2!.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('image', 'P2Q11.jpg'), ('corrAns2', ['2', '4'])]),
      OrderedDict([('image', 'P2Q12.jpg'), ('corrAns2', ['2', '4'])]),
      OrderedDict([('image', 'P2Q13.jpg'), ('corrAns2', ['2', '4'])]),
      OrderedDict([('image', 'P2Q14.jpg'), ('corrAns2', ['1', '4'])]),
      OrderedDict([('image', 'P2Q15.jpg'), ('corrAns2', ['2', '3'])]),
      OrderedDict([('image', 'P2Q16.jpg'), ('corrAns2', ['2', '3'])]),
      OrderedDict([('image', 'P2Q17.jpg'), ('corrAns2', ['1', '3'])]),
      OrderedDict([('image', 'P2Q18.jpg'), ('corrAns2', ['1', '4'])]),
      OrderedDict([('image', 'P2Q19.jpg'), ('corrAns2', ['2', '4'])]),
      OrderedDict([('image', 'P2Q20.jpg'), ('corrAns2', ['2', '3'])])]
    Routine part2Questions
  LoopTerminator trials_2
  Routine End
